PsychoPy2experiment version="2023.1.2"
Settings
  Data filename = u'Encoding A/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': '', 'Task': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  color = $[-1,-1,-1]
  expName = Encoding A
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent Instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will see a series of images on the screen and asked to rate each image as negative, neutral, or positive using the slider scale.

        Each image will be on screen for 3 seconds

        Make sure that you make your response while the image is still on the screen.

        Press the space bar for examples
    KeyboardComponent instructionkey
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine Examples
    ImageComponent example_image
      image [set every frame] = $Stim1
      pos = (0, 0.05)
      saveStartStop = False
      size = .6,.5
      startVal [time (s)] = 0.5
      texture resolution = 512
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    SliderComponent Valence_rating_slider
      durationEstim = 4
      fillColor = Blue
      forceEndRoutine = True
      granularity = 0
      labels = "Negative",None,None,None,"Neutral",None,None,None,"Positive"
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (.8, 0.1)
      startVal [time (s)] = 0.5
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (1,2,3,4,5,6,7,8,9)
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  Routine Start_Screen
    TextComponent start_screen
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The test will now start

        This should take about 10 minutes.

        Any questions?

        Press the space bar to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine End
    TextComponent endtext
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        END OF PART 1

        Please ring the doorbell to let your experimenter know that you are finished.

        THANK YOU
  Routine Study
    ImageComponent Stimuli
      image [set every frame] = $Stim
      pos = (0, .05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    SliderComponent emotional_valence_slider
      fillColor = Blue
      forceEndRoutine = False
      granularity = 0
      labels = "Negative",None,None,None,"Neutral",None,None,None,"Positive"
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (.8, 0.1)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (1,2,3,4,5,6,7,8,9)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Example_EncodingA.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stim1': 'EncodingA_Ex1.jpeg'},
      {'Stim1': 'EncodingA_Ex2.jpeg'},
      {'Stim1': 'EncodingA_Ex3.jpg'}]
    Routine Examples
  LoopTerminator trials
  Routine Start_Screen
  LoopInitiator task loopType="TrialHandler"
    Selected rows = 0:136
    conditionsFile = Encoding_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': '1004_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1005_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1006_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1007_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1008_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1009_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1010_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1011_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1012_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1013_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1015_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1016_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1017_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1018_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1019_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1020_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1022_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1023_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1024_A_H', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'},
      {'Stim': '1026_A_L', 'Valence': 'Negative', 'Stimtype': 'Baseline Lure'}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
    Routine Study
  LoopTerminator task
  Routine End
