PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'Retrieval A/%s_%s_%s' % (expInfo['Participant ID'], expName, expInfo['date'])
  Experiment info = {'Participant ID': '', 'Task': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2240, 1260]
  color = $[-1,-1,-1]
  expName = Retrieval A
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now we will test memory for the images you saw earlier


        V = Exact same
        N = New / Different


        The image will be on the screen for 3 seconds. Be sure to respond while the image is on the screen.

        Press the space bar for examples
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
      syncScreenRefresh = False
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  Routine Break
    TextComponent pause_instru
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You can take a quick break

        Instructions are the same

        V = Exact same
        N = New/Different

        Press the space bar to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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  Routine Example
    ImageComponent image_3
      image = RetrievalA_Ex1.jpeg
      saveStartStop = False
      size = (0.8, 0.5)
      startVal [time (s)] = 0.5
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    TextComponent text_5
      letterHeight = 0.06
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Imagine this is an image you saw in that first set of images
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
      syncScreenRefresh = False
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  Routine Example_Trial
    ImageComponent Example_Test
      image [set every frame] = $Stim2
      startVal [time (s)] = 0.5
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    KeyboardComponent Ex_Key
      allowedKeys = 'V','v','n','N'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    TextComponent text_6
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = V = EXACT SAME    N = NEW / DIFFERENT
      wrapWidth = 1.5
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  Routine StartScreen
    TextComponent start_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The test will now start

        This will take about 20 minutes

        There will be a break halfway through

        Any questions?

        Press the space bar to begin
    KeyboardComponent start_key
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine End
    TextComponent text_4
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        END OF THE TEST

        Please ring the doorbell to notify your experimenter that you are finished.

        THANK YOU
  Routine Test_1
    ImageComponent stimuli
      image [set every frame] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    KeyboardComponent respkey
      allowedKeys = 'V','v','N','n'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent text_2
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text = V = EXACT SAME   N = NEW / DIFFERENT
      wrapWidth = 1.5
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  Routine Test_2
    ImageComponent image_2
      image [set every frame] = $Stim
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.0
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    KeyboardComponent respkey2
      allowedKeys = 'V','v','N','n'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent text_3
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
      text = V = EXACT SAME   N = NEW / DIFFERENT
      wrapWidth = 1.5
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Flow
  Routine Instructions
  Routine Example
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Example_RetrievalA.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Stim2': 'RetrievalA_Ex1.jpg'},
      {'Stim2': 'RetrievalA_Ex2.jpg'},
      {'Stim2': 'RetrievalA_Ex3.jpg'}]
    Routine Example_Trial
  LoopTerminator trials
  Routine StartScreen
  LoopInitiator trials_1 loopType="TrialHandler"
    Selected rows = 0:91
    conditionsFile = Retrieval_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Stim': '1004_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1005_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1006_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1007_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1008_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1009_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1010_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1011_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1012_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1013_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1015_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1016_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1017_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1018_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1019_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1020_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1022_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1023_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1024_B_H', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1026_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1028_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1029_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'},
      {'Stim': '1039_B_L', 'ImageType': 'Negative', 'Stimtype': 'Lure'}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
    Routine Test_1
  LoopTerminator trials_1
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 91:182
    conditionsFile = Retrieval_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine Test_2
  LoopTerminator trials_2
  Routine End
